#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    ms2000:
        module.Class: 'motor.motor_asi_ms2000.MS2000'
        com_port: 'COM2'
        baud_rate: '9600'
        first_axis_label: 'x'
        second_axis_label: 'y'
        LED connected: False

    hamilton_valve:
        module.Class: 'valve.hamilton_valve.HamiltonValve'
        com_port: '/dev/ttyS0'
        daisychain_length: 1
        daisychain_config: {a:8}

logic:

    roi_logic:
        module.Class: 'roi_logic.RoiLogic'
        connect: 
            stage: 'ms2000'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    roi_gui:
        module.Class: 'ROI.roi_gui.RoiGUI' 
        default_path: 'C:\Users\sCMOS-1\roi_lists'
        connect: 
            roi_logic: 'roi_logic'

