#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware: 
    nifpga:
        module.Class: 'fpga.ni_fpga.Nifpga'
        resource: 'RIO0'
        default_bitfile: 'C:\\Users\\sCMOS-1\\Desktop\\LabView\\Current version\\Time lapse\\HUBBLE_FTL_v7_LabView 64bit\\FPGA\\FPGA Bitfiles\\FPGAv0_FPGATarget_FPGAlasercontrol_o8wg7Z4+KAQ.lvbitx'

    
logic:


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'


