#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    cameradummy:
        module.Class: 'camera.camera_dummy.CameraDummy'
        
        
    #thorlabs_camera:
    #    module.Class: 'camera.thorlabs.thorlabs_DCx.CameraThorlabs'
    #    default_exposure: 0.1
    #    default_gain: 1.0
    #    id_camera: 0 # if more tha one camera is present

    piezo_dummy:
        module.Class: 'piezo.piezo_dummy.PiezoDummy'


logic:
    
        
    camera_logic2:
        module.Class: 'camera_logic2.CameraLogic'
        connect:
            hardware: 'cameradummy'
            
    camera_logic:
        module.Class: 'camera_logic.CameraLogic'
        connect: 
            hardware: 'cameradummy'
            savelogic: 'savelogic'
       
        
    daq_ao_logic:
        module.Class: 'daq_ao_logic.DAQaoLogic'

           
           
    piezo_logic:
        module.Class: 'piezo_logic.PiezoLogic'
        connect: 
            piezo: 'piezo_dummy'
            
    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True
        save_pdf: True
        save_png: True
               

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'
        
        
    basic_gui:
        module.Class: 'fluorescence_microscopy.basic_gui.BasicGUI'
        connect:
            camera_logic: 'camera_logic2'
            daq_ao_logic: 'daq_ao_logic'
            piezo_logic: 'piezo_logic'
            
    camera_gui:
        module.Class: 'camera.cameragui.CameraGUI'
        connect:
            camera_logic: 'camera_logic'
            savelogic: 'savelogic'
            

        
        
    



